# Lu177: Halflife = 6.647 d
# Taken from MIRD radionuclide data and decay schemes, 2nd edition, KF Eckerman & A Endo Eds, 2008
#=====================================================
# betaminus emission spectrum: histogram, continuous energy spectrum
#=====================================================
/gate/source/addSource 			Lu177beta  gps
/gate/source/Lu177beta/attachTo		my_phantom
/gate/source/Lu177beta/gps/particle 	e-
/gate/source/Lu177beta/gps/angtype	iso
/gate/source/Lu177beta/gps/energytype 	Arb
/gate/source/Lu177beta/setIntensity     1
/gate/source/Lu177beta/gps/histname 	arb
/gate/source/Lu177beta/gps/position	-0.00605 -0.00605 -0.00605 mm
/gate/source/Lu177beta/gps/type 	Point

/gate/source/Lu177beta/gps/histpoint	0	 5.707
/gate/source/Lu177beta/gps/histpoint	0.0001	 5.705
/gate/source/Lu177beta/gps/histpoint	0.00011	 5.704
/gate/source/Lu177beta/gps/histpoint	0.00012	 5.704
/gate/source/Lu177beta/gps/histpoint	0.00013  5.704
/gate/source/Lu177beta/gps/histpoint	0.00014  5.704
/gate/source/Lu177beta/gps/histpoint	0.00015  5.703
/gate/source/Lu177beta/gps/histpoint	0.00016  5.703
/gate/source/Lu177beta/gps/histpoint	0.00018  5.703
/gate/source/Lu177beta/gps/histpoint	0.0002   5.702
/gate/source/Lu177beta/gps/histpoint	0.00022  5.702
/gate/source/Lu177beta/gps/histpoint	0.00024  5.701
/gate/source/Lu177beta/gps/histpoint	0.00026  5.701
/gate/source/Lu177beta/gps/histpoint	0.00028  5.7
/gate/source/Lu177beta/gps/histpoint	0.0003   5.7
/gate/source/Lu177beta/gps/histpoint    0.00032  5.699
/gate/source/Lu177beta/gps/histpoint	0.00036  5.698
/gate/source/Lu177beta/gps/histpoint	0.0004   5.697
/gate/source/Lu177beta/gps/histpoint    0.00045  5.696
/gate/source/Lu177beta/gps/histpoint    0.0005   5.694
/gate/source/Lu177beta/gps/histpoint    0.00055  5.693
/gate/source/Lu177beta/gps/histpoint	0.0006	 5.692
/gate/source/Lu177beta/gps/histpoint	0.00065	 5.691
/gate/source/Lu177beta/gps/histpoint	0.0007   5.689
/gate/source/Lu177beta/gps/histpoint	0.00075	 5.688
/gate/source/Lu177beta/gps/histpoint	0.0008   5.687
/gate/source/Lu177beta/gps/histpoint	0.00085  5.685
/gate/source/Lu177beta/gps/histpoint	0.0009   5.684
/gate/source/Lu177beta/gps/histpoint	0.001 	 5.682
/gate/source/Lu177beta/gps/histpoint	0.0011 	 5.679
/gate/source/Lu177beta/gps/histpoint	0.0012   5.676
/gate/source/Lu177beta/gps/histpoint	0.0013	 5.674
/gate/source/Lu177beta/gps/histpoint	0.0014 	 5.671
/gate/source/Lu177beta/gps/histpoint	0.0015   5.669
/gate/source/Lu177beta/gps/histpoint	0.0016   5.666
/gate/source/Lu177beta/gps/histpoint	0.0018 	 5.661
/gate/source/Lu177beta/gps/histpoint	0.002 	 5.656
/gate/source/Lu177beta/gps/histpoint	0.0022 	 5.651
/gate/source/Lu177beta/gps/histpoint    0.0024 	 5.646
/gate/source/Lu177beta/gps/histpoint	0.0026   5.641
/gate/source/Lu177beta/gps/histpoint    0.0028 	 5.636
/gate/source/Lu177beta/gps/histpoint	0.003	 5.63
/gate/source/Lu177beta/gps/histpoint	0.0032   5.625
/gate/source/Lu177beta/gps/histpoint	0.0036	 5.615
/gate/source/Lu177beta/gps/histpoint	0.004	 5.605
/gate/source/Lu177beta/gps/histpoint	0.0045 	 5.592
/gate/source/Lu177beta/gps/histpoint	0.005	 5.579
/gate/source/Lu177beta/gps/histpoint	0.0055 	 5.566
/gate/source/Lu177beta/gps/histpoint	0.006    5.554
/gate/source/Lu177beta/gps/histpoint	0.0065	 5.541
/gate/source/Lu177beta/gps/histpoint	0.007	 5.528
/gate/source/Lu177beta/gps/histpoint	0.0075	 5.515
/gate/source/Lu177beta/gps/histpoint	0.008 	 5.503
/gate/source/Lu177beta/gps/histpoint	0.0085   5.49
/gate/source/Lu177beta/gps/histpoint	0.009 	 5.477
/gate/source/Lu177beta/gps/histpoint	0.01	 5.452
/gate/source/Lu177beta/gps/histpoint	0.011 	 5.426
/gate/source/Lu177beta/gps/histpoint	0.012 	 5.401
/gate/source/Lu177beta/gps/histpoint	0.013    5.375
/gate/source/Lu177beta/gps/histpoint	0.014	 5.357
/gate/source/Lu177beta/gps/histpoint	0.015	 5.338
/gate/source/Lu177beta/gps/histpoint	0.016	 5.319
/gate/source/Lu177beta/gps/histpoint	0.018	 5.28
/gate/source/Lu177beta/gps/histpoint	0.02	 5.24
/gate/source/Lu177beta/gps/histpoint	0.022	 5.201
/gate/source/Lu177beta/gps/histpoint	0.024	 5.161
/gate/source/Lu177beta/gps/histpoint	0.026	 5.122
/gate/source/Lu177beta/gps/histpoint    0.028	 5.082	       	       	       	       	       	       	       	     
/gate/source/Lu177beta/gps/histpoint	0.03	 5.042
/gate/source/Lu177beta/gps/histpoint	0.032	 5.002
/gate/source/Lu177beta/gps/histpoint	0.036	 4.922
/gate/source/Lu177beta/gps/histpoint	0.04	 4.841
/gate/source/Lu177beta/gps/histpoint	0.045	 4.739
/gate/source/Lu177beta/gps/histpoint	0.05	 4.638
/gate/source/Lu177beta/gps/histpoint	0.055	 4.536
/gate/source/Lu177beta/gps/histpoint	0.06 	 4.434
/gate/source/Lu177beta/gps/histpoint	0.065	 4.333
/gate/source/Lu177beta/gps/histpoint	0.07	 4.232
/gate/source/Lu177beta/gps/histpoint	0.075	 4.131
/gate/source/Lu177beta/gps/histpoint   	0.08	 4.031       	       	       	       	       	       	       	       	       	     
/gate/source/Lu177beta/gps/histpoint	0.085	 3.932
/gate/source/Lu177beta/gps/histpoint	0.09	 3.834
/gate/source/Lu177beta/gps/histpoint	0.1	 3.642
/gate/source/Lu177beta/gps/histpoint	0.11	 3.456
/gate/source/Lu177beta/gps/histpoint	0.12	 3.276
/gate/source/Lu177beta/gps/histpoint	0.13	 3.106
/gate/source/Lu177beta/gps/histpoint	0.14	 2.946
/gate/source/Lu177beta/gps/histpoint	0.15	 2.797
/gate/source/Lu177beta/gps/histpoint	0.16	 2.661
/gate/source/Lu177beta/gps/histpoint	0.18	 2.433
/gate/source/Lu177beta/gps/histpoint	0.2	 2.223
/gate/source/Lu177beta/gps/histpoint	0.22	 2.009
/gate/source/Lu177beta/gps/histpoint	0.24	 1.793
/gate/source/Lu177beta/gps/histpoint	0.26	 1.578
/gate/source/Lu177beta/gps/histpoint	0.28	 1.367
/gate/source/Lu177beta/gps/histpoint	0.3	 1.161
/gate/source/Lu177beta/gps/histpoint	0.32	 0.9643
/gate/source/Lu177beta/gps/histpoint	0.36	 0.6102
/gate/source/Lu177beta/gps/histpoint	0.4	 0.3285
/gate/source/Lu177beta/gps/histpoint	0.45	 0.08584
/gate/source/Lu177beta/gps/histpoint	0.4978	 0                                                                                                                   
/gate/source/Lu177beta/gps/arbint       Spline

#=====================================================
# monoenergetic photon emissions; discrete X-rays and gammas
#=====================================================
/gate/source/addSource 			mono_ph gps 
/gate/source/mono_ph/attachTo	        my_phantom
/gate/source/mono_ph/gps/particle 	gamma
/gate/source/mono_ph/gps/angtype 	iso
/gate/source/mono_ph/gps/energytype 	User
/gate/source/mono_ph/setIntensity  	1.5543
/gate/source/mono_ph/gps/histname 	energy
/gate/source/mono_ph/gps/position      -0.00605 -0.00605 -0.00605 mm
/gate/source/mono_ph/gps/type         	Point

# Warning : probability bin values
/gate/source/mono_ph/gps/histpoint 	1.94297e-05	0
/gate/source/mono_ph/gps/histpoint 	1.94297e-05  	1.28087
/gate/source/mono_ph/gps/histpoint	1.94297e-05	0
/gate/source/mono_ph/gps/histpoint	3.31365e-05  	0
/gate/source/mono_ph/gps/histpoint	3.31365e-05  	8.9273e-08
/gate/source/mono_ph/gps/histpoint	3.31365e-05   	0
/gate/source/mono_ph/gps/histpoint	0.00021984  	0
/gate/source/mono_ph/gps/histpoint	0.00021984  	9.09227e-05
/gate/source/mono_ph/gps/histpoint	0.00021984	0
/gate/source/mono_ph/gps/histpoint	0.000482    	0
/gate/source/mono_ph/gps/histpoint	0.000482    	1.0522e-07
/gate/source/mono_ph/gps/histpoint	0.000482        0
/gate/source/mono_ph/gps/histpoint	0.0012047   	0
/gate/source/mono_ph/gps/histpoint	0.0012047   	1.2348e-07
/gate/source/mono_ph/gps/histpoint	0.0012047       0
/gate/source/mono_ph/gps/histpoint	0.00163903  	0
/gate/source/mono_ph/gps/histpoint	0.00163903  	0.00388609
/gate/source/mono_ph/gps/histpoint	0.00163903      0
/gate/source/mono_ph/gps/histpoint 	0.0016867   	0
/gate/source/mono_ph/gps/histpoint	0.0016867   	1.05166e-05
/gate/source/mono_ph/gps/histpoint	0.0016867       0
/gate/source/mono_ph/gps/histpoint	0.0069823   	0
/gate/source/mono_ph/gps/histpoint	0.0069823   	0.000875531
/gate/source/mono_ph/gps/histpoint	0.0069823       0
/gate/source/mono_ph/gps/histpoint	0.0072002   	0
/gate/source/mono_ph/gps/histpoint	0.0072002   	7.1451e-06
/gate/source/mono_ph/gps/histpoint	0.0072002       0
/gate/source/mono_ph/gps/histpoint	0.00745931  	0
/gate/source/mono_ph/gps/histpoint	0.00745931  	6.497e-06
/gate/source/mono_ph/gps/histpoint	0.00745931      0
/gate/source/mono_ph/gps/histpoint	0.00783281  	0
/gate/source/mono_ph/gps/histpoint	0.00783281	0.00144873
/gate/source/mono_ph/gps/histpoint	0.00783281      0
/gate/source/mono_ph/gps/histpoint	0.00788959  	0
/gate/source/mono_ph/gps/histpoint	0.00788959	0.012781
/gate/source/mono_ph/gps/histpoint	0.00788959      0
/gate/source/mono_ph/gps/histpoint	0.00818701 	0
/gate/source/mono_ph/gps/histpoint	0.00818701 	0.000341356
/gate/source/mono_ph/gps/histpoint	0.00818701      0
/gate/source/mono_ph/gps/histpoint	0.00866399	0
/gate/source/mono_ph/gps/histpoint	0.00866399	9.7877e-06
/gate/source/mono_ph/gps/histpoint	0.00866399      0
/gate/source/mono_ph/gps/histpoint	0.00888689	0
/gate/source/mono_ph/gps/histpoint	0.00888689   	0.00019394
/gate/source/mono_ph/gps/histpoint	0.00888689      0
/gate/source/mono_ph/gps/histpoint	0.00903261	0
/gate/source/mono_ph/gps/histpoint	0.00903261   	0.000153608
/gate/source/mono_ph/gps/histpoint	0.00903261      0
/gate/source/mono_ph/gps/histpoint	0.00903751	0
/gate/source/mono_ph/gps/histpoint	0.00903751	0.0117562
/gate/source/mono_ph/gps/histpoint	0.00903751      0
/gate/source/mono_ph/gps/histpoint	0.00912305  	0
/gate/source/mono_ph/gps/histpoint	0.00912305  	1.4403e-06
/gate/source/mono_ph/gps/histpoint	0.00912305      0
/gate/source/mono_ph/gps/histpoint	0.00914599  	0
/gate/source/mono_ph/gps/histpoint	0.00914599  	0.000250033
/gate/source/mono_ph/gps/histpoint	0.00914599      0
/gate/source/mono_ph/gps/histpoint	0.00918249   	0
/gate/source/mono_ph/gps/histpoint	0.00918249   	1.4094e-06
/gate/source/mono_ph/gps/histpoint	0.00918249      0
/gate/source/mono_ph/gps/histpoint	0.00933272	0
/gate/source/mono_ph/gps/histpoint	0.00933272 	0.000248019
/gate/source/mono_ph/gps/histpoint	0.00933272      0
/gate/source/mono_ph/gps/histpoint	0.00934358  	0
/gate/source/mono_ph/gps/histpoint	0.00934358  	0.00222157
/gate/source/mono_ph/gps/histpoint	0.00934358      0
/gate/source/mono_ph/gps/histpoint	0.00948575  	0
/gate/source/mono_ph/gps/histpoint	0.00948575  	3.06292e-05
/gate/source/mono_ph/gps/histpoint	0.00948575      0
/gate/source/mono_ph/gps/histpoint	0.00951196	0
/gate/source/mono_ph/gps/histpoint	0.00951196  	3.1308e-07
/gate/source/mono_ph/gps/histpoint	0.00951196      0
/gate/source/mono_ph/gps/histpoint	0.00951949  	0
/gate/source/mono_ph/gps/histpoint	0.00951949  	5.3094e-06
/gate/source/mono_ph/gps/histpoint	0.00951949      0
/gate/source/mono_ph/gps/histpoint	0.00952019  	0
/gate/source/mono_ph/gps/histpoint	0.00952019	2.8779e-07
/gate/source/mono_ph/gps/histpoint	0.00952019      0
/gate/source/mono_ph/gps/histpoint	0.00953105  	0
/gate/source/mono_ph/gps/histpoint	0.00953105  	9.7372e-07
/gate/source/mono_ph/gps/histpoint	0.00953105      0
/gate/source/mono_ph/gps/histpoint	0.00953291  	0
/gate/source/mono_ph/gps/histpoint	0.00953291  	5.4671e-06
/gate/source/mono_ph/gps/histpoint	0.00953291      0
/gate/source/mono_ph/gps/histpoint	0.00955254	0
/gate/source/mono_ph/gps/histpoint	0.00955254	2.6282e-06
/gate/source/mono_ph/gps/histpoint	0.00955254      0
/gate/source/mono_ph/gps/histpoint	0.00955312	0
/gate/source/mono_ph/gps/histpoint	0.00955312	2.23545e-05
/gate/source/mono_ph/gps/histpoint	0.00955312      0
/gate/source/mono_ph/gps/histpoint	0.00957631	0
/gate/source/mono_ph/gps/histpoint	0.00957631	7.9476e-06
/gate/source/mono_ph/gps/histpoint	0.00957631      0
/gate/source/mono_ph/gps/histpoint	0.0102373	0
/gate/source/mono_ph/gps/histpoint	0.0102373	7.88938e-05
/gate/source/mono_ph/gps/histpoint	0.0102373       0
/gate/source/mono_ph/gps/histpoint	0.0103872	0
/gate/source/mono_ph/gps/histpoint	0.0103872	2.4937e-06
/gate/source/mono_ph/gps/histpoint	0.0103872       0
/gate/source/mono_ph/gps/histpoint	0.0105374	0
/gate/source/mono_ph/gps/histpoint	0.0105374	0.00213882
/gate/source/mono_ph/gps/histpoint	0.0105374       0
/gate/source/mono_ph/gps/histpoint	0.0106904	0
/gate/source/mono_ph/gps/histpoint	0.0106904	1.4824e-05
/gate/source/mono_ph/gps/histpoint	0.0106904       0
/gate/source/mono_ph/gps/histpoint	0.0107249	0
/gate/source/mono_ph/gps/histpoint	0.0107249	5.3143e-07
/gate/source/mono_ph/gps/histpoint	0.0107249       0
/gate/source/mono_ph/gps/histpoint	0.0107357	0
/gate/source/mono_ph/gps/histpoint	0.0107357	4.811e-06
/gate/source/mono_ph/gps/histpoint	0.0107357       0
/gate/source/mono_ph/gps/histpoint	0.0107573	0
/gate/source/mono_ph/gps/histpoint	0.0107573	2.2850e-05
/gate/source/mono_ph/gps/histpoint	0.0107573       0
/gate/source/mono_ph/gps/histpoint	0.0108097	0
/gate/source/mono_ph/gps/histpoint	0.0108097	4.70596e-05
/gate/source/mono_ph/gps/histpoint	0.0108097       0
/gate/source/mono_ph/gps/histpoint	0.0108692	0
/gate/source/mono_ph/gps/histpoint	0.0108692	6.39197e-05
/gate/source/mono_ph/gps/histpoint	0.0108692       0
/gate/source/mono_ph/gps/histpoint	0.0110194	0
/gate/source/mono_ph/gps/histpoint	0.0110194	7.3656e-07
/gate/source/mono_ph/gps/histpoint	0.0110194       0
/gate/source/mono_ph/gps/histpoint	0.0110303	0
/gate/source/mono_ph/gps/histpoint	0.0110303	1.1462e-06
/gate/source/mono_ph/gps/histpoint	0.0110303       0
/gate/source/mono_ph/gps/histpoint	0.0111987	0
/gate/source/mono_ph/gps/histpoint	0.0111987	6.733e-06
/gate/source/mono_ph/gps/histpoint	0.0111987       0
/gate/source/mono_ph/gps/histpoint	0.0112069	0
/gate/source/mono_ph/gps/histpoint	0.0112069	8.8153e-06
/gate/source/mono_ph/gps/histpoint	0.0112069       0
/gate/source/mono_ph/gps/histpoint	0.0112392	0
/gate/source/mono_ph/gps/histpoint	0.0112392	7.5337e-09
/gate/source/mono_ph/gps/histpoint	0.0112392       0
/gate/source/mono_ph/gps/histpoint	0.01112398	0
/gate/source/mono_ph/gps/histpoint	0.01112398	1.1183e-08
/gate/source/mono_ph/gps/histpoint	0.01112398      0
/gate/source/mono_ph/gps/histpoint	0.0547191	0
/gate/source/mono_ph/gps/histpoint	0.0547191	0.0163172
/gate/source/mono_ph/gps/histpoint	0.0547191       0
/gate/source/mono_ph/gps/histpoint	0.0559237	0
/gate/source/mono_ph/gps/histpoint	0.0559237	0.0285488
/gate/source/mono_ph/gps/histpoint	0.0559237       0
/gate/source/mono_ph/gps/histpoint	0.063128	0
/gate/source/mono_ph/gps/histpoint	0.063128	0.00303923
/gate/source/mono_ph/gps/histpoint	0.063128        0
/gate/source/mono_ph/gps/histpoint	0.0633831	0
/gate/source/mono_ph/gps/histpoint	0.0633831	0.00587418
/gate/source/mono_ph/gps/histpoint	0.0633831       0
/gate/source/mono_ph/gps/histpoint	0.0637565	0
/gate/source/mono_ph/gps/histpoint	0.0637565	6.16681e-05
/gate/source/mono_ph/gps/histpoint	0.0637565       0
/gate/source/mono_ph/gps/histpoint	0.0638133 	0
/gate/source/mono_ph/gps/histpoint	0.0638133	7.84966e-05
/gate/source/mono_ph/gps/histpoint	0.0638133       0
/gate/source/mono_ph/gps/histpoint	0.0650467	0
/gate/source/mono_ph/gps/histpoint	0.0650467	0.000683509
/gate/source/mono_ph/gps/histpoint	0.0650467       0
/gate/source/mono_ph/gps/histpoint	0.0651063	0
/gate/source/mono_ph/gps/histpoint	0.0651063	0.00132314
/gate/source/mono_ph/gps/histpoint	0.0651063       0
/gate/source/mono_ph/gps/histpoint	0.0652562	0
/gate/source/mono_ph/gps/histpoint	0.0652562	1.45294e-05
/gate/source/mono_ph/gps/histpoint	0.0652562       0
/gate/source/mono_ph/gps/histpoint	0.0652671	0
/gate/source/mono_ph/gps/histpoint	0.0652671	1.84032e-05
/gate/source/mono_ph/gps/histpoint	0.0652671       0
/gate/source/mono_ph/gps/histpoint	0.0654356	0
/gate/source/mono_ph/gps/histpoint	0.0654356	0.000154461
/gate/source/mono_ph/gps/histpoint	0.0654356       0
/gate/source/mono_ph/gps/histpoint	0.0654439	0
/gate/source/mono_ph/gps/histpoint	0.0654439	0.00032004
/gate/source/mono_ph/gps/histpoint	0.0654439       0
/gate/source/mono_ph/gps/histpoint	0.0654762	0
/gate/source/mono_ph/gps/histpoint	0.0654762	1.6084e-07
/gate/source/mono_ph/gps/histpoint	0.0654762       0
/gate/source/mono_ph/gps/histpoint	0.0654766	0
/gate/source/mono_ph/gps/histpoint	0.0654766	1.927e-07
/gate/source/mono_ph/gps/histpoint	0.0654766       0
/gate/source/mono_ph/gps/histpoint      0.071646	0    	
/gate/source/mono_ph/gps/histpoint	0.071646 	0.00154	
/gate/source/mono_ph/gps/histpoint	0.071646 	0
/gate/source/mono_ph/gps/histpoint      0.11295		0
/gate/source/mono_ph/gps/histpoint	0.11295		0.064
/gate/source/mono_ph/gps/histpoint	0.11295		0
/gate/source/mono_ph/gps/histpoint	0.136725	0
/gate/source/mono_ph/gps/histpoint	0.136725	0.00048
/gate/source/mono_ph/gps/histpoint    	0.136725	0
/gate/source/mono_ph/gps/histpoint	0.208366	0
/gate/source/mono_ph/gps/histpoint	0.208366 	0.11
/gate/source/mono_ph/gps/histpoint	0.208366	0
/gate/source/mono_ph/gps/histpoint	0.249674	0
/gate/source/mono_ph/gps/histpoint	0.249674	0.00212
/gate/source/mono_ph/gps/histpoint    	0.249674	0
/gate/source/mono_ph/gps/histpoint	0.321316	0
/gate/source/mono_ph/gps/histpoint	0.321316 	0.00219
/gate/source/mono_ph/gps/histpoint	0.321316	0

#=====================================================
# monoenergetic discrete electron emissions: 
#=====================================================
/gate/source/addSource                  mono_el gps
/gate/source/mono_el/attachTo           my_phantom
/gate/source/mono_el/gps/particle	e-
/gate/source/mono_el/gps/angtype        iso
/gate/source/mono_el/gps/energytype     User
/gate/source/mono_el/setIntensity	1.2718
/gate/source/mono_el/gps/histname	energy
/gate/source/mono_el/gps/position      -0.00605 -0.00605 -0.00605 mm
/gate/source/mono_el/gps/type           Point

 Warning : probability  bin values
/gate/source/mono_el/gps/histpoint	1.0732e-05	0
/gate/source/mono_el/gps/histpoint 	1.0732e-05	0.111216
/gate/source/mono_el/gps/histpoint 	1.0732e-05	0
/gate/source/mono_el/gps/histpoint	2.44606e-05	0
/gate/source/mono_el/gps/histpoint	2.44606e-05	0.157786
/gate/source/mono_el/gps/histpoint	2.44606e-05	0
/gate/source/mono_el/gps/histpoint	0.000159973	0
/gate/source/mono_el/gps/histpoint	0.000159973	0.446606
/gate/source/mono_el/gps/histpoint	0.000159973	0
/gate/source/mono_el/gps/histpoint	0.000281854	0
/gate/source/mono_el/gps/histpoint	0.000281854	0.0140702
/gate/source/mono_el/gps/histpoint	0.000281854	0
/gate/source/mono_el/gps/histpoint	0.000303459	0
/gate/source/mono_el/gps/histpoint	0.000303459	0.0758875
/gate/source/mono_el/gps/histpoint	0.000303459	0
/gate/source/mono_el/gps/histpoint	0.000716784	0
/gate/source/mono_el/gps/histpoint	0.000716784	0.0135035
/gate/source/mono_el/gps/histpoint	0.000716784	0
/gate/source/mono_el/gps/histpoint	0.00136622	0
/gate/source/mono_el/gps/histpoint	0.00136622	0.194576
/gate/source/mono_el/gps/histpoint	0.00136622	0
/gate/source/mono_el/gps/histpoint	0.00154549	0
/gate/source/mono_el/gps/histpoint	0.00154549	0.0102732
/gate/source/mono_el/gps/histpoint	0.00154549	0
/gate/source/mono_el/gps/histpoint	0.00176734	0
/gate/source/mono_el/gps/histpoint	0.00176734	0.000640929
/gate/source/mono_el/gps/histpoint	0.00176734	0
/gate/source/mono_el/gps/histpoint	0.00620291	0
/gate/source/mono_el/gps/histpoint	0.00620291	0.0633905
/gate/source/mono_el/gps/histpoint	0.00620291	0
/gate/source/mono_el/gps/histpoint	0.00782315	0
/gate/source/mono_el/gps/histpoint	0.00782315	0.0235413
/gate/source/mono_el/gps/histpoint	0.00782315	0
/gate/source/mono_el/gps/histpoint	0.00947345	0
/gate/source/mono_el/gps/histpoint	0.00947345	0.00220287
/gate/source/mono_el/gps/histpoint	0.00947345	0
/gate/source/mono_el/gps/histpoint	0.044528	0
/gate/source/mono_el/gps/histpoint	0.044528 	0.00180948
/gate/source/mono_el/gps/histpoint	0.044528	0
/gate/source/mono_el/gps/histpoint	0.0531026	0
/gate/source/mono_el/gps/histpoint	0.0531026	0.000936766
/gate/source/mono_el/gps/histpoint	0.0531026	0
/gate/source/mono_el/gps/histpoint	0.0616878	0
/gate/source/mono_el/gps/histpoint	0.0616878	0.000116604
/gate/source/mono_el/gps/histpoint	0.0616878	0

/gate/source/mono_el/gps/histpoint	0.00616401	0
/gate/source/mono_el/gps/histpoint      0.00616401	0.00109753
/gate/source/mono_el/gps/histpoint	0.00616401	0
/gate/source/mono_el/gps/histpoint	0.0474678	0
/gate/source/mono_el/gps/histpoint	0.0474678	0.0517072
/gate/source/mono_el/gps/histpoint	0.0474678	0
/gate/source/mono_el/gps/histpoint	0.060401	0
/gate/source/mono_el/gps/histpoint	0.060401 	0.000118801
/gate/source/mono_el/gps/histpoint	0.060401 	0
/gate/source/mono_el/gps/histpoint	0.060883	0
/gate/source/mono_el/gps/histpoint	0.060883	4.1354e-05
/gate/source/mono_el/gps/histpoint	0.060883	0
/gate/source/mono_el/gps/histpoint	0.0620877	0
/gate/source/mono_el/gps/histpoint	0.0620877	5.09951e-05
/gate/source/mono_el/gps/histpoint	0.0620877	0
/gate/source/mono_el/gps/histpoint	0.069547	0
/gate/source/mono_el/gps/histpoint	0.069547	4.8452e-05
/gate/source/mono_el/gps/histpoint	0.069547	0
/gate/source/mono_el/gps/histpoint	0.0712428	0
/gate/source/mono_el/gps/histpoint	0.0712428	0.00026802
/gate/source/mono_el/gps/histpoint	0.0712428	0
/gate/source/mono_el/gps/histpoint	0.071646	0
/gate/source/mono_el/gps/histpoint	0.071646	1.34486e-05
/gate/source/mono_el/gps/histpoint	0.071646	0
/gate/source/mono_el/gps/histpoint	0.101705	0
/gate/source/mono_el/gps/histpoint	0.101705	0.00552802
/gate/source/mono_el/gps/histpoint	0.101705	0
/gate/source/mono_el/gps/histpoint	0.102187	0
/gate/source/mono_el/gps/histpoint	0.102187	0.0347404
/gate/source/mono_el/gps/histpoint	0.102187 	0
/gate/source/mono_el/gps/histpoint	0.1033992	0
/gate/source/mono_el/gps/histpoint	0.1033992	0.0306777
/gate/source/mono_el/gps/histpoint	0.1033992	0
/gate/source/mono_el/gps/histpoint	0.110851	0
/gate/source/mono_el/gps/histpoint	0.110851	0.0177125
/gate/source/mono_el/gps/histpoint	0.110851	0
/gate/source/mono_el/gps/histpoint	0.11295		0
/gate/source/mono_el/gps/histpoint	0.11295		0.00481564
/gate/source/mono_el/gps/histpoint	0.11295		0
/gate/source/mono_el/gps/histpoint	0.12548		0
/gate/source/mono_el/gps/histpoint	0.12548		3.04142e-05
/gate/source/mono_el/gps/histpoint	0.12548		0
/gate/source/mono_el/gps/histpoint	0.125962	0
/gate/source/mono_el/gps/histpoint	0.125962	0.000103191
/gate/source/mono_el/gps/histpoint	0.125962	0
/gate/source/mono_el/gps/histpoint	0.127166	0
/gate/source/mono_el/gps/histpoint	0.127166	8.49289e-05
/gate/source/mono_el/gps/histpoint	0.127166	0
/gate/source/mono_el/gps/histpoint	0.134626	0
/gate/source/mono_el/gps/histpoint	0.134626	5.42269e-05
/gate/source/mono_el/gps/histpoint	0.134626	0
/gate/source/mono_el/gps/histpoint	0.136725	0
/gate/source/mono_el/gps/histpoint	0.136725	1.48186e-05
/gate/source/mono_el/gps/histpoint	0.136725	0
/gate/source/mono_el/gps/histpoint	0.142884	0
/gate/source/mono_el/gps/histpoint	0.142884	0.00597023	
/gate/source/mono_el/gps/histpoint	0.142884	0
/gate/source/mono_el/gps/histpoint	0.184192	0
/gate/source/mono_el/gps/histpoint	0.184192 	0.000191324
/gate/source/mono_el/gps/histpoint	0.184192	0
/gate/source/mono_el/gps/histpoint	0.197121	0
/gate/source/mono_el/gps/histpoint	0.197121 	0.000769803
/gate/source/mono_el/gps/histpoint	0.197121 	0
/gate/source/mono_el/gps/histpoint	0.197603	0
/gate/source/mono_el/gps/histpoint	0.197603	0.000123382
/gate/source/mono_el/gps/histpoint	0.197603	0
/gate/source/mono_el/gps/histpoint	0.198808	0
/gate/source/mono_el/gps/histpoint	0.198808	0.000119152
/gate/source/mono_el/gps/histpoint	0.198808 	0
/gate/source/mono_el/gps/histpoint	0.206267	0
/gate/source/mono_el/gps/histpoint	0.206267	0.000231783
/gate/source/mono_el/gps/histpoint	0.206267	0
/gate/source/mono_el/gps/histpoint	0.208366	0
/gate/source/mono_el/gps/histpoint	0.208366	6.60486e-05
/gate/source/mono_el/gps/histpoint	0.208366	0
/gate/source/mono_el/gps/histpoint	0.238429	0
/gate/source/mono_el/gps/histpoint	0.238429        2.25367e-05
/gate/source/mono_el/gps/histpoint	0.238429	0 
/gate/source/mono_el/gps/histpoint	0.238911	0
/gate/source/mono_el/gps/histpoint	0.238911 	3.53928e-05
/gate/source/mono_el/gps/histpoint	0.238911	0
/gate/source/mono_el/gps/histpoint	0.240116	0
/gate/source/mono_el/gps/histpoint	0.240116	2.30467e-05
/gate/source/mono_el/gps/histpoint	0.240116	0
/gate/source/mono_el/gps/histpoint	0.247575	0
/gate/source/mono_el/gps/histpoint	0.247575	1.97518e-05
/gate/source/mono_el/gps/histpoint	0.247575	0
/gate/source/mono_el/gps/histpoint	0.249674	0
/gate/source/mono_el/gps/histpoint	0.249674	5.4547e-06
/gate/source/mono_el/gps/histpoint	0.249674	0
/gate/source/mono_el/gps/histpoint	0.255834	0
/gate/source/mono_el/gps/histpoint	0.255834	6.25701e-05
/gate/source/mono_el/gps/histpoint	0.255834 	0
/gate/source/mono_el/gps/histpoint	0.310071	0
/gate/source/mono_el/gps/histpoint	0.310071	9.0415e-06
/gate/source/mono_el/gps/histpoint	0.310071	0
/gate/source/mono_el/gps/histpoint	0.310553	0
/gate/source/mono_el/gps/histpoint	0.310553	1.137e-06
/gate/source/mono_el/gps/histpoint	0.310553	0
/gate/source/mono_el/gps/histpoint	0.311758	0
/gate/source/mono_el/gps/histpoint	0.311758	7.8745e-07
/gate/source/mono_el/gps/histpoint	0.311758	0
/gate/source/mono_el/gps/histpoint	0.319217	0
/gate/source/mono_el/gps/histpoint	0.319217 	2.5204e-06
/gate/source/mono_el/gps/histpoint	0.319217	0
/gate/source/mono_el/gps/histpoint	0.321316	0
/gate/source/mono_el/gps/histpoint	0.321316	7.2706e-07
/gate/source/mono_el/gps/histpoint	0.321316	0
